PsychoPy2experiment version="1.90.3"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  expName = 40pair
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
    TextComponent word
      color = $[-1.000,-1.000,-1.000]
      text [set every repeat] = $text
      stopVal [duration (s)] = 4
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine resp
    TextComponent thanksText
      color = $[-1.000,-1.000,-1.000]
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        This is the end of the experiment.

        Thanks!
  Routine ins
    TextComponent instText
      color = $[-1.000,-1.000,-1.000]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        OK. Ready for the real thing?

        (Esc will quit)

        Press any key to continue
    KeyboardComponent ready
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine ins
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = 2nback.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('n', 1), ('text', u'\u0434\u0432\u0430'), ('q', u'\u0434\u0432\u0430'), ('answer', u'\u0434\u0432\u0430')]),
      OrderedDict([('n', 2), ('text', u'\u0442\u0440\u0438'), ('q', u'\u0442\u0440\u0438'), ('answer', u'\u0442\u0440\u0438')]),
      OrderedDict([('n', 3), ('text', u'\u0434\u0432\u0430'), ('q', u'\u0434\u0432\u0430'), ('answer', u'\u0434\u0432\u0430')]),
      OrderedDict([('n', 4), ('text', u'\u0434\u0432\u0430'), ('q', u'\u0434\u0432\u0430'), ('answer', u'\u0434\u0432\u0430')]),
      OrderedDict([('n', 5), ('text', u'\u0442\u0440\u0438'), ('q', u'\u0442\u0440\u0438'), ('answer', u'\u0442\u0440\u0438')])]
    Routine trial
  LoopTerminator trials
  Routine resp
